PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://sabinaraja.github.io/onlinestudy_B/
  End Message = You will now be redirected to the next part of the experiment. 
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = FTT_1i
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to part 1 of the Facial Trustworthiness Ratings Task!
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a fixation cross followed by a photograph of a face. Your task is to provide ratings of how trustworthy each face looks.


        Please answer as quickly and as accurately as possible. You will begin with a set of practice trials before moving on to the real task.

        When you are ready to proceed, press any key to continue. The practice trials will begin immediately.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationcross2
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    ImageComponent fixationcross
      image = Screen Shot 2024-04-08 at 3.33.49 PM.png
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Blank_2
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    TextComponent text_4
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Trustworthiness_Rating
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How trustworthy is this face?
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    TextComponent text_7
      letterHeight = 0.02
      pos = (-0.6, -0.4)
      startVal [time (s)] = 0.0
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      text:
        0
        (Not at all
        trustworthy)
    TextComponent text_8
      letterHeight = 0.02
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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      text:
        100
        (Extremely
        Trustworthy)
  Routine End_Message
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing part 1 of the Facial Trustworthiness Ratings Task!

        Press any key to terminate this window.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The practice trials are now complete. You will now begin the real task trials.

        When you are ready, press any key to continue. The first trial will begin immediately.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practicefaces_2
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    ImageComponent practicefaces
      image [set every repeat] = $Practice_Faces
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine TrialFaces
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    ImageComponent FaceStimuli
      image [set every repeat] = $Face_Stimuli
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine ProlificID
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        What is your Prolific ID?
        Type your 24-character Prolific ID below. When you are ready to proceed, click ENTER.
        Please DO NOT proceed before entering your Prolific ID.
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()  # get the pressed keys
        if 'return' in keys:
            # End the routine if "Enter" is pressed
            if len(textbox.text) > 0:  # make sure some text is entered
                continueRoutine = False
            else:
                # Optionally give feedback if the textbox is empty
                print("Please enter a valid ID")
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here....
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine ProlificID
  Routine Instructions
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Face_trust_Practice_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Practice_Faces': 'Practice/066_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/099_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/153_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/040_y_f_n_b.jpg'},
      {'Practice_Faces': 'Practice/106_y_f_n_a.jpg'},
      {'Practice_Faces': 'Practice/150_y_f_n_b.jpg'}]
    Routine fixationcross2
    Routine practicefaces_2
    Routine Blank_2
    Routine Trustworthiness_Rating
  LoopTerminator Practice
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = face_trust_Face_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Face_Stimuli': 'Trustworthiness/081_y_m_n_a.jpg', 'Face_ID': '081_m', 'high_or_low_trust': 'low_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/160_y_m_n_b.jpg', 'Face_ID': '160_m', 'high_or_low_trust': 'low_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/167_y_m_n_b.jpg', 'Face_ID': '167_m', 'high_or_low_trust': 'low_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/057_y_m_n_a.jpg', 'Face_ID': '057_m', 'high_or_low_trust': 'low_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/162_y_f_n_a.jpg', 'Face_ID': '162_f', 'high_or_low_trust': 'low_f', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/034_y_f_n_a.jpg', 'Face_ID': '034_f', 'high_or_low_trust': 'low_f', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/020_y_f_n_a.jpg', 'Face_ID': '020_f', 'high_or_low_trust': 'low_f', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/101_y_f_n_a.jpg', 'Face_ID': '101_f', 'high_or_low_trust': 'low_f', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/123_y_m_n_a.jpg', 'Face_ID': '123_m', 'high_or_low_trust': 'high_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/008_y_m_n_b.jpg', 'Face_ID': '008_m', 'high_or_low_trust': 'high_m', 'real_or_random': 'real '},
      {'Face_Stimuli': 'Trustworthiness/119_y_m_n_b.jpg', 'Face_ID': '119_m', 'high_or_low_trust': 'high_m', 'real_or_random': 'real '}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
    Routine fixationcross2
    Routine TrialFaces
    Routine Blank_2
    Routine Trustworthiness_Rating
  LoopTerminator trials
  Routine End_Message
